<?xml version="1.0" ?>
<PsychoPy2experiment encoding="utf-8" version="2025.1.0">
  <Settings>
    <Param val="ptb" valType="str" updates="None" name="Audio lib"/>
    <Param val="" valType="str" updates="None" name="Completed URL"/>
    <Param val="auto" valType="str" updates="None" name="Data file delimiter"/>
    <Param val="u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])" valType="code" updates="None" name="Data filename"/>
    <Param val="True" valType="bool" updates="None" name="Enable Escape"/>
    <Param val="ご協力ありがとうございました." valType="str" updates="None" name="End Message"/>
    <Param val="{'participant': 'f&quot;{randint(0, 999999):06.0f}&quot;', 'session': '001'}" valType="code" updates="None" name="Experiment info"/>
    <Param val="True" valType="bool" updates="None" name="Force stereo"/>
    <Param val="True" valType="bool" updates="None" name="Full-screen window"/>
    <Param val="" valType="str" updates="None" name="HTML path"/>
    <Param val="" valType="str" updates="None" name="Incomplete URL"/>
    <Param val="testMonitor" valType="str" updates="None" name="Monitor"/>
    <Param val="[]" valType="list" updates="None" name="Resources"/>
    <Param val="False" valType="bool" updates="None" name="Save csv file"/>
    <Param val="False" valType="bool" updates="None" name="Save excel file"/>
    <Param val="False" valType="bool" updates="None" name="Save hdf5 file"/>
    <Param val="True" valType="bool" updates="None" name="Save log file"/>
    <Param val="True" valType="bool" updates="None" name="Save psydat file"/>
    <Param val="True" valType="bool" updates="None" name="Save wide csv file"/>
    <Param val="1" valType="num" updates="None" name="Screen"/>
    <Param val="True" valType="bool" updates="None" name="Show info dlg"/>
    <Param val="False" valType="bool" updates="None" name="Show mouse"/>
    <Param val="height" valType="str" updates="None" name="Units"/>
    <Param val="" valType="str" updates="None" name="Use version"/>
    <Param val="[2560, 1440]" valType="list" updates="None" name="Window size (pixels)"/>
    <Param val="none" valType="str" updates="None" name="backgroundFit"/>
    <Param val="" valType="str" updates="None" name="backgroundImg"/>
    <Param val="avg" valType="str" updates="None" name="blendMode"/>
    <Param val="float" valType="str" updates="None" name="clockFormat"/>
    <Param val="{'thisRow.t': 'priority.CRITICAL', 'expName': 'priority.LOW'}" valType="dict" updates="None" name="colPriority"/>
    <Param val="$[0,0,0]" valType="color" updates="None" name="color"/>
    <Param val="rgb" valType="str" updates="None" name="colorSpace"/>
    <Param val="warning" valType="code" updates="None" name="consoleLoggingLevel"/>
    <Param val="default" valType="str" updates="None" name="ecSampleRate"/>
    <Param val="100.1.1.1" valType="str" updates="None" name="elAddress"/>
    <Param val="FILTER_LEVEL_2" valType="str" updates="None" name="elDataFiltering"/>
    <Param val="FILTER_LEVEL_OFF" valType="str" updates="None" name="elLiveFiltering"/>
    <Param val="EYELINK 1000 DESKTOP" valType="str" updates="None" name="elModel"/>
    <Param val="ELLIPSE_FIT" valType="str" updates="None" name="elPupilAlgorithm"/>
    <Param val="PUPIL_AREA" valType="str" updates="None" name="elPupilMeasure"/>
    <Param val="1000" valType="num" updates="None" name="elSampleRate"/>
    <Param val="False" valType="bool" updates="None" name="elSimMode"/>
    <Param val="RIGHT_EYE" valType="str" updates="None" name="elTrackEyes"/>
    <Param val="PUPIL_CR_TRACKING" valType="str" updates="None" name="elTrackingMode"/>
    <Param val="taniguchi" valType="str" updates="None" name="expName"/>
    <Param val="" valType="str" updates="None" name="expVersion"/>
    <Param val="on Sync" valType="str" updates="None" name="exportHTML"/>
    <Param val="None" valType="str" updates="None" name="eyetracker"/>
    <Param val="" valType="code" updates="None" name="frameRate"/>
    <Param val="Attempting to measure frame rate of screen, please wait..." valType="str" updates="None" name="frameRateMsg"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="gpAddress"/>
    <Param val="4242" valType="num" updates="None" name="gpPort"/>
    <Param val="PsychToolbox" valType="str" updates="None" name="keyboardBackend"/>
    <Param val="info" valType="code" updates="None" name="logging level"/>
    <Param val="True" valType="bool" updates="None" name="measureFrameRate"/>
    <Param val="('MIDDLE_BUTTON',)" valType="list" updates="None" name="mgBlink"/>
    <Param val="CONTINUOUS" valType="str" updates="None" name="mgMove"/>
    <Param val="0.5" valType="num" updates="None" name="mgSaccade"/>
    <Param val="neon.local" valType="str" updates="None" name="plCompanionAddress"/>
    <Param val="8080" valType="num" updates="None" name="plCompanionPort"/>
    <Param val="0.6" valType="num" updates="None" name="plConfidenceThreshold"/>
    <Param val="" valType="str" updates="None" name="plPupilCaptureRecordingLocation"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="plPupilRemoteAddress"/>
    <Param val="50020" valType="num" updates="None" name="plPupilRemotePort"/>
    <Param val="1000" valType="num" updates="None" name="plPupilRemoteTimeoutMs"/>
    <Param val="False" valType="bool" updates="None" name="plPupillometryOnly"/>
    <Param val="psychopy_iohub_surface" valType="str" updates="None" name="plSurfaceName"/>
    <Param val="0" valType="code" updates="None" name="runMode"/>
    <Param val="False" valType="bool" updates="None" name="rush"/>
    <Param val="time" valType="str" updates="None" name="sortColumns"/>
    <Param val="" valType="str" updates="None" name="tbLicenseFile"/>
    <Param val="" valType="str" updates="None" name="tbModel"/>
    <Param val="60" valType="num" updates="None" name="tbSampleRate"/>
    <Param val="60" valType="str" updates="None" name="tbSamplingRate"/>
    <Param val="" valType="str" updates="None" name="tbSerialNo"/>
    <Param val="BINOCULAR" valType="str" updates="None" name="tbTrackEyes"/>
    <Param val="pyglet" valType="str" updates="None" name="winBackend"/>
  </Settings>
  <Routines>
    <Routine name="trial">
      <RoutineSettingsComponent name="trial" plugin="None">
        <Param val="none" valType="str" updates="None" name="backgroundFit"/>
        <Param val="" valType="str" updates="None" name="backgroundImg"/>
        <Param val="$[0,0,0]" valType="color" updates="None" name="color"/>
        <Param val="rgb" valType="str" updates="None" name="colorSpace"/>
        <Param val="" valType="str" updates="constant" name="desc"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="False" valType="code" updates="None" name="forceNonSlip"/>
        <Param val="trial" valType="code" updates="None" name="name"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="constant" name="skipIf"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="False" valType="bool" updates="None" name="useWindowParams"/>
      </RoutineSettingsComponent>
      <TextComponent name="text_fixation" plugin="None">
        <Param val="white" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="False" valType="code" updates="constant" name="draggable"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="None" valType="str" updates="constant" name="flip"/>
        <Param val="Arial" valType="str" updates="constant" name="font"/>
        <Param val="LTR" valType="str" updates="None" name="languageStyle"/>
        <Param val="0.05" valType="num" updates="constant" name="letterHeight"/>
        <Param val="text_fixation" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.5" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="1.5" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="+" valType="str" updates="constant" name="text"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="code" updates="None" name="validator"/>
        <Param val="" valType="num" updates="constant" name="wrapWidth"/>
      </TextComponent>
      <ImageComponent name="image" plugin="None">
        <Param val="center" valType="str" updates="constant" name="anchor"/>
        <Param val="$[1,1,1]" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="False" valType="code" updates="constant" name="draggable"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="False" valType="bool" updates="constant" name="flipHoriz"/>
        <Param val="False" valType="bool" updates="constant" name="flipVert"/>
        <Param val="C:/Users/nakazawa/Desktop/Clipboard_05-02-2025_01.png" valType="file" updates="set every repeat" name="image"/>
        <Param val="linear" valType="str" updates="constant" name="interpolate"/>
        <Param val="" valType="str" updates="constant" name="mask"/>
        <Param val="image" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="(0.5, 0.5)" valType="list" updates="constant" name="size"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="4" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="15" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="128" valType="num" updates="constant" name="texture resolution"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="code" updates="None" name="validator"/>
      </ImageComponent>
      <KeyboardComponent name="key_resp" plugin="None">
        <Param val="'1','2','3'" valType="list" updates="constant" name="allowedKeys"/>
        <Param val="" valType="str" updates="constant" name="correctAns"/>
        <Param val="" valType="str" updates="None" name="deviceLabel"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="True" valType="bool" updates="constant" name="discard previous"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="True" valType="bool" updates="constant" name="forceEndRoutine"/>
        <Param val="key_resp" valType="code" updates="None" name="name"/>
        <Param val="press" valType="str" updates="constant" name="registerOn"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="4" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="15" valType="code" updates="constant" name="stopVal"/>
        <Param val="last key" valType="str" updates="constant" name="store"/>
        <Param val="False" valType="bool" updates="constant" name="storeCorrect"/>
        <Param val="True" valType="bool" updates="constant" name="syncScreenRefresh"/>
      </KeyboardComponent>
      <TextComponent name="text" plugin="None">
        <Param val="white" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="False" valType="code" updates="constant" name="draggable"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="None" valType="str" updates="constant" name="flip"/>
        <Param val="Arial" valType="str" updates="constant" name="font"/>
        <Param val="LTR" valType="str" updates="None" name="languageStyle"/>
        <Param val="0.05" valType="num" updates="constant" name="letterHeight"/>
        <Param val="text" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="2" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="2" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="1: Human 2:AI Generated, 3:Not Sure" valType="str" updates="constant" name="text"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="code" updates="None" name="validator"/>
        <Param val="" valType="num" updates="constant" name="wrapWidth"/>
      </TextComponent>
      <EyetrackerRecordComponent name="etRecord" plugin="None">
        <Param val="Start and Stop" valType="str" updates="None" name="actionType"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="etRecord" valType="code" updates="None" name="name"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="19" valType="code" updates="constant" name="stopVal"/>
        <Param val="False" valType="bool" updates="constant" name="stopWithRoutine"/>
        <Param val="False" valType="bool" updates="None" name="syncScreenRefresh"/>
      </EyetrackerRecordComponent>
    </Routine>
    <EyetrackerCalibrationRoutine name="calibration">
      <Param name="borderColor" updates="None" val="black" valType="color"/>
      <Param name="borderWidth" updates="None" val="2" valType="num"/>
      <Param name="colorSpace" updates="None" val="rgb" valType="str"/>
      <Param name="customTarget" updates="None" val="" valType="code"/>
      <Param name="disabled" updates="None" val="False" valType="bool"/>
      <Param name="expandDur" updates="None" val="1" valType="num"/>
      <Param name="expandScale" updates="None" val="1.5" valType="num"/>
      <Param name="fillColor" updates="None" val="" valType="color"/>
      <Param name="innerBorderColor" updates="None" val="black" valType="color"/>
      <Param name="innerBorderWidth" updates="None" val="2" valType="num"/>
      <Param name="innerFillColor" updates="None" val="green" valType="color"/>
      <Param name="innerRadius" updates="None" val="0.0035" valType="num"/>
      <Param name="movementAnimation" updates="None" val="True" valType="bool"/>
      <Param name="movementDur" updates="None" val="1.0" valType="num"/>
      <Param name="name" updates="None" val="calibration" valType="code"/>
      <Param name="outerRadius" updates="None" val="0.01" valType="num"/>
      <Param name="progressMode" updates="None" val="time" valType="str"/>
      <Param name="randomisePos" updates="None" val="True" valType="bool"/>
      <Param name="targetDelay" updates="None" val="1.0" valType="num"/>
      <Param name="targetDur" updates="None" val="1.5" valType="num"/>
      <Param name="targetLayout" updates="None" val="NINE_POINTS" valType="str"/>
      <Param name="textColor" updates="None" val="white" valType="color"/>
      <Param name="units" updates="None" val="from exp settings" valType="str"/>
      <Param name="useCustom" updates="None" val="False" valType="code"/>
    </EyetrackerCalibrationRoutine>
    <EyetrackerCalibrationRoutine name="calibration_2">
      <Param name="borderColor" updates="None" val="black" valType="color"/>
      <Param name="borderWidth" updates="None" val="2" valType="num"/>
      <Param name="colorSpace" updates="None" val="rgb" valType="str"/>
      <Param name="customTarget" updates="None" val="" valType="code"/>
      <Param name="disabled" updates="None" val="False" valType="bool"/>
      <Param name="expandDur" updates="None" val="1" valType="num"/>
      <Param name="expandScale" updates="None" val="1.5" valType="num"/>
      <Param name="fillColor" updates="None" val="" valType="color"/>
      <Param name="innerBorderColor" updates="None" val="black" valType="color"/>
      <Param name="innerBorderWidth" updates="None" val="2" valType="num"/>
      <Param name="innerFillColor" updates="None" val="green" valType="color"/>
      <Param name="innerRadius" updates="None" val="0.0035" valType="num"/>
      <Param name="movementAnimation" updates="None" val="True" valType="bool"/>
      <Param name="movementDur" updates="None" val="1.0" valType="num"/>
      <Param name="name" updates="None" val="calibration_2" valType="code"/>
      <Param name="outerRadius" updates="None" val="0.01" valType="num"/>
      <Param name="progressMode" updates="None" val="time" valType="str"/>
      <Param name="randomisePos" updates="None" val="True" valType="bool"/>
      <Param name="targetDelay" updates="None" val="1.0" valType="num"/>
      <Param name="targetDur" updates="None" val="1.5" valType="num"/>
      <Param name="targetLayout" updates="None" val="NINE_POINTS" valType="str"/>
      <Param name="textColor" updates="None" val="white" valType="color"/>
      <Param name="units" updates="None" val="from exp settings" valType="str"/>
      <Param name="useCustom" updates="None" val="False" valType="code"/>
    </EyetrackerCalibrationRoutine>
  </Routines>
  <Flow>
    <Routine name="trial"/>
  </Flow>
</PsychoPy2experiment>
